s:Ge/World/Material = "Vacuum"
d:Ge/World/HLX      = 1. m
d:Ge/World/HLY      = 1. m
d:Ge/World/HLZ      = 1. m
b:Ge/World/Invisible = "True"

s:Ge/WaterBox/Type     = "TsBox"
s:Ge/WaterBox/Parent   = "World"
s:Ge/WaterBox/Material = "G4_WATER"
d:Ge/WaterBox/HLX      = 100 mm
d:Ge/WaterBox/HLY      = 50 mm
d:Ge/WaterBox/HLZ      = 150 mm
d:Ge/WaterBox/TransX   = 0. cm
d:Ge/WaterBox/TransY   = 0. cm
d:Ge/WaterBox/TransZ   = 0. cm
d:Ge/WaterBox/RotX     = 0. deg
d:Ge/WaterBox/RotY     = 0. deg
d:Ge/WaterBox/RotZ     = 0. deg
s:Ge/WaterBox/Color    = "blue"
s:Ge/WaterBox/Field = "DipoleMagnet"
u:Ge/WaterBox/MagneticFieldDirectionX    = 0.0
u:Ge/WaterBox/MagneticFieldDirectionY    = 1.0
u:Ge/WaterBox/MagneticFieldDirectionZ    = 0.0
d:Ge/WaterBox/MagneticFieldStrength      = 1.5 tesla

s:So/Proton/Type = "Beam"
s:So/Proton/Component = "BeamPosition"
s:So/Proton/BeamParticle = "proton"
d:So/Proton/BeamEnergy = 200 MeV
u:So/Proton/BeamEnergySpread = 0.
s:So/Proton/BeamPositionDistribution = "None"
s:So/Proton/BeamAngularDistribution  = "None"
i:So/Proton/NumberOfHistoriesInRun   = 1000

d:Ge/BeamPosition/TransZ = Ge/World/HLZ m * -1
d:Ge/BeamPosition/RotX = 0. deg

Ts/UseQt = "True"

s:Gr/ViewA/Type                             = "OpenGL"
i:Gr/ViewA/WindowSizeX                      = 900
i:Gr/ViewA/WindowSizeY                      = 900
d:Gr/ViewA/Theta                            = 90 deg
d:Gr/ViewA/Phi                              = 90 deg
s:Gr/ViewA/Projection                       = "Perspective"
d:Gr/ViewA/PerspectiveAngle                 = 5 deg
u:Gr/ViewA/Zoom                             = 1
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "False"

b:Ts/PauseBeforeQuit            = "True"
i:Ts/NumberOfThreads = 4
b:Ts/ShowCPUTime                = "True"

i:Ts/Seed = 3

d:Ph/Default/CutForAllParticles = 0.01 mm
